---
API: 3
OpenSesame: 4.1.1
Platform: nt
---
set width 1280
set uniform_coordinates yes
set title Algebra
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 1024
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 24
set font_italic no
set font_family sans
set font_bold no
set experiment_path "C:/Users/Gebruiker/Documents/Masters CCS/Year1/Block12"
set disable_garbage_collection yes
set description "Algebra for fMRI & EEG"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background black

define sketchpad black
	set duration 200
	set description "Displays stimuli"

define sketchpad black2
	set duration 1
	set description "Displays stimuli"

define sketchpad black2_1
	set duration 0
	set description "Displays stimuli"

define inline_script block_end
	set description "Executes Python code"
	___run__
	if var.practice == "yes":
		trigger = 1
		sendTrigger(trigger)
	else:
		#end block
		trigger = 2 * var.block + 1
		sendTrigger(trigger)
	__end__
	set _prepare ""

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run block_stuff always
	run trial_loop_experiment always
	run end_of_block always
	run flush_mouse always
	run block_end True
	run end_of_block_2 always
	run black always

define sequence block_sequence_practice
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run trial_loop_practice always

define inline_script block_stuff
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.block = var.block + 1
	if var.practice == "yes":
		trigger = 1
		sendTrigger(trigger)
	else:
		#start block
		trigger = 2 * var.block
		sendTrigger(trigger)
	__end__

define inline_script create_problem
	set description "Executes Python code"
	set _run "my_mouse.flush()"
	___prepare__
	var.trial = var.trial + 1
	if var.practice == "yes":
		trigger = 1
		sendTrigger(trigger)
	# Create a problem here, depending on the type
	
	# type 1: x = 8
	# type 2: x - 2 = 4 / x + 4 = 9
	# type 3: x = 32/8
	# type 4: 8x = 32
	# type 5: 8x - 4 = 28 / 8x + 4 = 20
	
	var.correct = 0
	var.correct_response = random.randint(1,9)
	
	if var.problem_type == 1:
		var.cur_problem = 'x = ' + str(var.correct_response)
	elif var.problem_type == 2:
		if random.randint(0,1) == 0:
			righthand = random.randint(var.correct_response + 1,10)
			var.cur_problem = 'x + ' + str(righthand - var.correct_response) + ' = ' + str(righthand)
		else:
			var.correct_response = random.randint(2,9) #x can't be 1
			lefthand = random.randint(1,var.correct_response-1)
			var.cur_problem = 'x - ' + str(lefthand) + ' = ' + str(var.correct_response - lefthand)
	elif var.problem_type == 3:
		divider = random.randint(2,9)
		var.cur_problem = 'x = ' + str(var.correct_response * divider) + ' / ' + str(divider)
	elif var.problem_type == 4:
		divider = random.randint(2,9)
		var.cur_problem = str(divider) + 'x = ' + str(var.correct_response * divider)
	elif var.problem_type == 5:
		divider = random.randint(2,9)
		if random.randint(0,1) == 0:
			lefthand = random.randint(1,9)	
			var.cur_problem = str(divider) + 'x + ' + str(lefthand) + ' = ' + str(var.correct_response * divider + lefthand)
		else:
			var.correct_response = random.randint(2,9) #x can't be 1
			lefthand = random.randint(1,var.correct_response-1)
			var.cur_problem = str(divider) + 'x - ' + str(lefthand) + ' = ' + str(var.correct_response * divider - lefthand)
	
	var.correct_response = str(var.correct_response)
	
	
	# Determine jitter fixation length: for fMRI 2 seconds, for EEG + behav uniform between 400-600 ms.
	# 500, 750 copied from template on brightspace 
	var.fix_dur = random.randint(500,750) - 5 #-5 to correspond to refresh rate
	__end__

define inline_script eeg_click_trigger
	set description "Executes Python code"
	___run__
	if eeg:
		trigger = 30 + var.problem_type
		sendTrigger(trigger)
	__end__
	set _prepare ""

define inline_script eeg_fixation_trigger
	set description "Executes Python code"
	___run__
	if eeg:
		trigger = 10 + var.problem_type
		sendTrigger(trigger)
	__end__
	set _prepare ""

define inline_script eeg_preparation
	set description "Executes Python code"
	set _run ""
	___prepare__
	eeg = True
	
	
	
	if not eeg:
		trigger = 0
	
	if eeg:
		try:
			import serial #pyserial
			
			port = serial.Serial('COM4', baudrate = 115200)
			port.flush()
			port.reset_input_buffer()
			port.reset_output_buffer()
			
			print('The usb-serial port opened')
		except:
			print('The usb-serial port couldn\'t be opened')
			
		def sendTrigger(trigger):
			trigger = int(trigger)
			try: 
				port.write(trigger.to_bytes(1,'big'))
			except:
				print('Failed to send trigger!')
	__end__

define inline_script eeg_response_trigger
	set description "Executes Python code"
	___run__
	if eeg:
		sendTrigger(trigger)
		var.time_response_trigger = clock.time()
	__end__
	set _prepare ""

define inline_script eeg_stimulus_trigger
	set description "Executes Python code"
	___run__
	if eeg:
		trigger = 20 + var.problem_type
		sendTrigger(trigger)
	__end__
	set _prepare ""

define sketchpad end_of_block
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="This is the end of block [block] of 4. <br />Please notify the experimenter. <br />You can take a short break.<br /><br />" x=0 y=32 z_index=0

define sketchpad end_of_block_2
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="When you're ready, please click to continue with the next block." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="" x=-64 y=96 z_index=0

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="You're done! Thanks for participating!" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="That was the end of the practice,<br />please notify the experimenter." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run eeg_preparation True
	run preparation always
	run instructions always
	run start_practice always
	run black always
	run start_recording True
	run practice_loop always
	run end_of_practice always
	run start_of_exp always
	run black always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 4
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 1 practice no
	setcycle 2 practice no
	setcycle 3 practice no
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration 995
	set description "Provides feedback to the participant"
	draw textline center=1 color=red font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if="[fbstate] = 'wrong'" text=Wrong x=0 y=0 z_index=0
	draw textline center=1 color=green font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if="[fbstate] = 'correct'" text="Correct!" x=0 y=0 z_index=0
	draw textline center=1 color=red font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if="[fbstate] = 'toolate'" text="Too late!" x=0 y=0 z_index=0
	draw textline center=1 color=red font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if="[fbstate] = 'tooslow'" text="Too slow!" x=0 y=0 z_index=0

define inline_script feedback_trigger
	set description "Executes Python code"
	___run__
	if eeg:
		trigger = 80 + var.problem_type
		sendTrigger(trigger)
	__end__
	set _prepare ""

define sketchpad fixation
	set start_response_interval no
	set duration "[fix_dur]"
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_0
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_end
	set duration 995
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=38 html=yes show_if=always text="+" x=0 y=0 z_index=0

define inline_script flush_mouse
	set description "Executes Python code"
	set _run "my_mouse.flush()"
	set _prepare ""

define sketchpad instructions
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=always text="For this experiment you have to solve algebra questions. <br />A question will appear on the screen and as soon as you know the value of ‘X’ you click the mouse button. <br />When you click the mouse button a circular keyboard will appear where you can select the correct value.  <br />The experiment will start with a short practice session. " x=1696 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="In this experiment you are asked to solve algebra questions such as:<br /><br />8x = 4<br /><br />When you know the value of X, click the button on the side of the trackball. <br />A circular keypad will appear where you <br />can select your response. <br />You can select your response by moving the pointer <br />with the red ball on the trackball.<br /><br />You only have a short time to select your response,<br />so make sure you already know the answer<br />before you continue to the keypad!" x=0 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=36 html=yes show_if=always text="Welcome!" x=0 y=-224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="Click the trackball to continue." x=0 y=352 z_index=0

define inline_script keypad_response
	set description "Executes Python code"
	___run__
	if var.response_problem == 'None':
		var.RT_problem = var.response_time_problem
		var.RT_response = 0
		var.response = 'None'
		var.fbstate = 'toolate'
	
	else:
	
		## display canvas
		var.time_keypad = keypad_canvas.show()
		if eeg:
			#set trigger here as soon as keypad is shown
			trigger = 40 + var.problem_type
			sendTrigger(trigger)
		## display mouse
		my_mouse.flush()
		my_mouse.set_pos(pos=(0,0))
		#my_mouse.show_cursor(show=True)
	
		## capture response
		response = 0
		timeout = 2000 #timeout is 2 seconds
	
		## process response
		while response == 0:
			button, mouse_loc, mouse_time = my_mouse.get_click(buttonlist=[1], timeout=(var.time_keypad + timeout - clock.time()),visible=True)
			if button == None:
				response = 'None'
				var.fbstate = 'tooslow'
	
			else:
				mouse_x = mouse_loc[0]
				mouse_y = mouse_loc[1]
				#if mouse_x > min_x and mouse_x < max_x and mouse_y > min_y and mouse_y < max_y:
				cnt = 0
				for x, y in keys_xy:
					if mouse_x > (x-displacement) and mouse_x < (x+displacement) and mouse_y > (y-displacement) and mouse_y < (y+displacement):
						response = keys_val[cnt]
						break
					cnt = cnt + 1
	
		#log RTs and response
		var.RT_problem = var.response_time_problem
		var.RT_response = mouse_time - var.time_keypad
		var.response = response
		var.total_problem = var.RT_response + var.RT_problem
		#determine correctness
		if var.response == var.correct_response:
			var.correct = 1
			var.fbstate = 'correct'
			if eeg:
				trigger = 50 + var.problem_type
				sendTrigger(trigger)
				var.time_response_trigger = clock.time()
	
		elif var.response != 'None':
			var.fbstate = 'wrong'
			if eeg:
				trigger = 60 + var.problem_type
				sendTrigger(trigger)
				var.time_response_trigger = clock.time()
		else:
			if eeg:
				trigger = 70 + var.problem_type
				sendTrigger(trigger)
				var.time_response_trigger = clock.time()
	__end__
	set _prepare ""

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log experiment_file
	log datetime
	log subject_nr
	log practice
	log block
	log trial
	log fix_dur
	log problem_type
	log Retrieval
	log Transformation
	log cur_problem
	log correct_response
	log response
	log correct
	log RT_problem
	log RT_response
	log time_fixation
	log time_problem
	log time_keypad
	log time_feedback
	log time_fixation_end

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence_practice
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run block_sequence_practice

define inline_script preparation
	set description "Executes Python code"
	___run__
	my_mouse.flush()
	
	
	#keypad_canvas.show()
	#print 'hallo'
	__end__
	___prepare__
	
	import random
	var.block = 0
	var.trial = 0
	
	#prepare mouse
	my_mouse = mouse()
	
	#prepare keypad canvas
	keypad_canvas = canvas()
	keypad_canvas.penwidth = 2
	keypad_canvas.font_size = 24
	
	
	# draw keys
	#keys_xy = xy_grid(3, 48)
	keys_xy = xy_circle(9,70,-85) 
	keys_val = [1,2,3,4,5,6,7,8,9]
	button_size = 42
	displacement = button_size/2
	min_x = min(keys_xy)[0] - displacement
	max_x = max(keys_xy)[0] + displacement
	min_y = min(keys_xy)[1] - displacement
	max_y = max(keys_xy)[1] + displacement
	
	i = 0
	for x, y in keys_xy:
		#keypad_canvas.rect(x-displacement, y-displacement, button_size, button_size, fill=True, color='lightslategrey') #fill grey
		#keypad_canvas.rect(x-displacement, y-displacement, button_size, button_size, color='darkgrey') #white border
		keypad_canvas.circle(x,y,button_size/2,fill=True,color='lightslategrey')
		keypad_canvas.circle(x,y,button_size/2,color='darkgrey')
		
		#digit
		keypad_canvas.text(keys_val[i],x=x,y=y)
		i=i+1
	__end__

define sketchpad problem
	set timeout 9995
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="[cur_problem]" x=0 y=0 z_index=0

define sketchpad problem_0_sketchpad
	set timeout 9995
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="[cur_problem]" x=0 y=0 z_index=0

define sketchpad start_of_exp
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="The real experiment consists of 4 blocks.<br /><br />Please click to start the first block." x=0 y=0 z_index=0

define sketchpad start_practice
	set start_response_interval no
	set duration mouseclick
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="The experiment begins with a short practice session,<br />followed by four experimental blocks.<br /><br /><br />Click the trackball to start the practice session." x=0 y=32 z_index=0

define inline_script start_recording
	set description "Executes Python code"
	___run__
	if eeg:
	    sendTrigger(254)
	__end__
	set _prepare ""

define loop trial_loop_experiment
	set source table
	set skip 0
	set repeat 10
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 5
	set continuous no
	set column_order "problem_type;Retrieval;Transformation"
	set break_if_on_first yes
	set break_if False
	setcycle 0 problem_type 1
	setcycle 0 Retrieval none
	setcycle 0 Transformation none
	setcycle 1 problem_type 2
	setcycle 1 Retrieval minimal
	setcycle 1 Transformation one
	setcycle 2 problem_type 3
	setcycle 2 Retrieval one
	setcycle 2 Transformation none
	setcycle 3 problem_type 4
	setcycle 3 Retrieval one
	setcycle 3 Transformation one
	setcycle 4 problem_type 5
	setcycle 4 Retrieval two
	setcycle 4 Transformation two
	run trial_sequence

define loop trial_loop_practice
	set source_file ""
	set source table
	set skip 0
	set repeat 4
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 5
	set continuous no
	set column_order "problem_type;Retrieval;Transformation"
	set break_if_on_first yes
	set break_if never
	setcycle 0 problem_type 1
	setcycle 0 Retrieval none
	setcycle 0 Transformation none
	setcycle 1 problem_type 2
	setcycle 1 Retrieval minimal
	setcycle 1 Transformation one
	setcycle 2 problem_type 3
	setcycle 2 Retrieval one
	setcycle 2 Transformation none
	setcycle 3 problem_type 4
	setcycle 3 Retrieval one
	setcycle 3 Transformation one
	setcycle 4 problem_type 5
	setcycle 4 Retrieval two
	setcycle 4 Transformation two
	run trial_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run create_problem always
	run fixation_0 True
	run eeg_fixation_trigger True
	run fixation always
	run flush_mouse always
	run problem_0_sketchpad True
	run eeg_stimulus_trigger True
	run problem always
	run eeg_click_trigger True
	run keypad_response always
	run black2_1 always
	run feedback_trigger True
	run feedback always
	run fixation_end always
	run logger always

